CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:32
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag folder with images corresponding to nuclei and cytoplasmic signals.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Group images based on different channels (Channel), fields of view (Position) and different timepoints (time). ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<File>.*) (?P<Position>.*) - (?P<time>.*) (?P<Channel>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Separate channels between cytoplasmic signal (G3BP1 tagged to mEGFP) and nuclear signal (H2B-mCherry. ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C=0")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C=1")
    Name to assign these images:G3BP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/jose/Desktop/120721/Illumantion_Correction-Image/GFP_correction_function.npy
    Name to assign this image:GFP_correction
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Position
    Metadata category:time

CorrectIlluminationApply:[module_num:5|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notes:['I am using Substract to how the illumination function is applied because I used the feature Background to generate the GFP_correction function. ']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
    Select the input image:G3BP1
    Name the output image:Corrected_G3BP1
    Select the illumination function:GFP_correction
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:6|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notes:['Rescale intensity of nuclei (rescale only used for segmentation).']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
    Select the input image:Nucleus
    Name the output image:RescaleIntensity_Nuclei
    Rescaling method:Divide each image by the same value
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    Divisor value:0.05
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
RescaleIntensity:[module_num:7|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notes:['Rescale intensity of G3BP1 signal (rescale only used for segmentation, not intensity calculations).']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
    Select the input image:Corrected_G3BP1
    Name the output image:RescaleIntensity_G3BP1
    Rescaling method:Divide each image by the same value
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    Divisor value:0.03
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the nuclei from the mCherry rescaled image. Depending on stain, you may have to optimize thresholding strategy.']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
    Select the input image:RescaleIntensity_Nuclei
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):45,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:9|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor, as deteremined here by G3BP1 image (Gaussian filtered). The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:RescaleIntensity_G3BP1
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:Yes
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
IdentifyTertiaryObjects:[module_num:10|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notes:['Identify the cytoplasm by "subtracting" the nuclei objects from the cell objects.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:11|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notes:['I am measuring the GFP pixel intensity from the cytoplasm cells to eventually filter cells that has very low or no GFP signal. ']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
    Select images to measure:RescaleIntensity_G3BP1
    Select objects to measure:Cytoplasm

FilterObjects:[module_num:12|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notes:['Filter cells that are below a minimum  GFP pixel value. ']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
    Select the objects to filter:Cytoplasm
    Name the output objects:Filtered_Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_RescaleIntensity_G3BP1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.15
    Filter using a maximum measurement value?:No
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
ExpandOrShrinkObjects:[module_num:13|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notes:['Shrink cytoplasm to remove edges, as this is where segmentation error occurs. Can optimize based on cell type and goodness of segmentation based on G3BP1 signal. ']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
    Select the input objects:Filtered_Cells
    Name the output objects:Shrunken_Cytoplasm
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

EnhanceOrSuppressFeatures:[module_num:14|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notes:['Enhancing "speckle" features. This can sometimes increase noise in "non-SG" images, especially when sample is fixed. Live cell images seem to do better.']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
    Select the input image:RescaleIntensity_G3BP1
    Name the output image:Enhance_SG
    Select the operation:Enhance
    Feature size:25
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:15|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notes:['Identify SGs from the enhanced and masked image. You can play with these parameters based upon your imaging conditions and what your granules look like. ']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
    Select the input image:Enhance_SG
    Name the primary objects to be identified:ID_SGs
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.9,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:16|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notes:['I am measuring the size and shape of stress granules because I want to filter potential artifacts based on circularity (eccentricity). ']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
    Select object sets to measure:ID_SGs
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:17|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notes:['I am filtering stress granules based on circularity (eccentricity). ']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
    Select the objects to filter:ID_SGs
    Name the output objects:Filtered_SGs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.8

MaskImage:[module_num:18|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notes:['Masking the G3BP1 image to remove nuclear signals.']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
    Select the input image:RescaleIntensity_G3BP1
    Name the output image:Masked_Cells
    Use objects or an image as a mask?:Objects
    Select object for mask:Shrunken_Cytoplasm
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    Invert the mask?:No

MaskObjects:[module_num:19|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notes:['Masking the shrunken cytoplasm of cells to remove the signal from stress granules so I can measure only the integrated cytoplasmic GFP pixel intensity. ']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
    Select objects to be masked:Shrunken_Cytoplasm
    Name the masked objects:Masked_Cytoplasm_withoutSGs
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Filtered_SGs
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

RelateObjects:[module_num:20|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notes:['Here I am relating the segmented cytoplasms (with no stress granules) to their original cell. ']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
    Parent objects:Filtered_Cells
    Child objects:Masked_Cytoplasm_withoutSGs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:21|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notes:['Here I am relating the filtered stress granules to their original cell. ']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
    Parent objects:Filtered_Cells
    Child objects:Filtered_SGs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:22|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notes:['I am measuring the GFP signal coming from the filtered stress granules and the cytoplasms of cells (whole cell - nucleus). ']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
    Select images to measure:Corrected_G3BP1
    Select objects to measure:Filtered_SGs, ID_SGs, Masked_Cytoplasm_withoutSGs

MeasureObjectSizeShape:[module_num:23|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notes:['I am measuring the size and shape of  filtered stress granules and the cytoplasms of cells (whole cell - nucleus). ']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
    Select object sets to measure:Filtered_SGs, Masked_Cytoplasm_withoutSGs
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayObjects:[module_num:24|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notes:['Overlaying segmented cytoplasm on top of the rescaled GFP image. ']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
    Input:RescaleIntensity_G3BP1
    Name the output image:Overlaid_Cytoplasms
    Objects:Masked_Cytoplasm_withoutSGs
    Opacity:0.9

OverlayObjects:[module_num:25|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notes:['Overlaying segmented prefiltered stress granules (granules identified before applying a circularity filter) on top of the rescaled GFP image. ']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
    Input:RescaleIntensity_G3BP1
    Name the output image:Overlaid_Prefiltered_SGs
    Objects:ID_SGs
    Opacity:0.9

OverlayObjects:[module_num:26|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notes:['Overlaying segmented post-filtered stress granules (granules identified after applying a circularity filter) on top of the rescaled GFP image. ']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
    Input:RescaleIntensity_G3BP1
    Name the output image:Overlaid_Filtered_SGs
    Objects:Filtered_SGs
    Opacity:0.9

SaveImages:[module_num:27|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Corrected_G3BP1
    Select method for constructing file names:From image filename
    Select image name for file prefix:G3BP1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Original
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/120721/sodium_arsenite/G3BP1wt
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:28|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notes:['Saving rescaled GFP image. ']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
    Select the type of image to save:Image
    Select the image to save:RescaleIntensity_G3BP1
    Select method for constructing file names:From image filename
    Select image name for file prefix:G3BP1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Transformed
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/120721/sodium_arsenite/G3BP1wt
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:29|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notes:['Saving segemented cytoplasms (whole cell - nucleus) on top of rescaled GFP image. ']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_Cytoplasms
    Select method for constructing file names:From image filename
    Select image name for file prefix:G3BP1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_Cells
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/120721/sodium_arsenite/G3BP1wt
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:30|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notes:['Saving prefiltered stress granules (granules identified before applying filter on circularity). ']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_Prefiltered_SGs
    Select method for constructing file names:From image filename
    Select image name for file prefix:G3BP1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_Prefiltered_SGs
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/120721/sodium_arsenite/G3BP1wt
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:31|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notes:['Saving post-filtered stress granules (granules identified after applying filter on circularity). ']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_Filtered_SGs
    Select method for constructing file names:From image filename
    Select image name for file prefix:G3BP1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_Filtered_SGs
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/120721/sodium_arsenite/G3BP1wt
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:32|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv’s.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/120721/sodium_arsenite/G3BP1wt
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Filtered_SGs|Location_Center_X,Filtered_SGs|Location_Center_Y,Filtered_SGs|Location_Center_Z,Filtered_SGs|Location_CenterMassIntensity_X_Corrected_G3BP1,Filtered_SGs|Location_CenterMassIntensity_Y_Corrected_G3BP1,Filtered_SGs|Location_CenterMassIntensity_Z_Corrected_G3BP1,Filtered_SGs|Location_MaxIntensity_X_Corrected_G3BP1,Filtered_SGs|Location_MaxIntensity_Z_Corrected_G3BP1,Filtered_SGs|Location_MaxIntensity_Y_Corrected_G3BP1,Filtered_SGs|AreaShape_MaxFeretDiameter,Filtered_SGs|AreaShape_Solidity,Filtered_SGs|AreaShape_MinFeretDiameter,Filtered_SGs|AreaShape_MeanRadius,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Y125A_
    Overwrite existing files without warning?:Yes
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