CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your workspace, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<File>.*) (?P<Position>.*) - (?P<time>.*) (?P<Channel>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in the folder against the unique text pattern for each stain: D.TIF for DAPI, F.TIF for the FITC image, R.TIF for the rhodamine image. The three images together comprise an image set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C=0")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C=1")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Position
    Metadata category:time

RescaleIntensity:[module_num:5|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notes:['Rescale intensity of nuclei (rescale only used for segmentation) to enhance Hoechst signal. ']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
    Select the input image:Hoechst
    Name the output image:RescaleIntensity_Nuclei
    Rescaling method:Divide each image by the same value
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    Divisor value:0.01
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
RescaleIntensity:[module_num:6|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notes:['Rescale intensity of GFP (rescale only used for segmentation, not intensity calculations).']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
    Select the input image:GFP
    Name the output image:RescaleIntensity_GFP
    Rescaling method:Divide each image by the same value
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    Divisor value:0.01
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the nuclei from the mCherry image. Depending on stain, may have to optimize thresholding strategy.']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
    Select the input image:RescaleIntensity_Nuclei
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):45,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:8|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor, as deteremined here by GFP image (Rescaled). The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:RescaleIntensity_GFP
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Filtered_Nuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:Yes
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
ExpandOrShrinkObjects:[module_num:9|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notes:['Shrink cytoplasm to remove edges, as this is where segmentation error occurs. Can optimize based on cell type and goodness of segmentation based on G3BP1 signal. ']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
    Select the input objects:Cells
    Name the output objects:Shrunken_Cells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

EnhanceOrSuppressFeatures:[module_num:10|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notes:['Enhancing "speckle" features. This can sometimes increase noise in "non-SG" cases, especially when sample is fixed. Live cell images seem to do better.']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
    Select the input image:RescaleIntensity_GFP
    Name the output image:Enhance_SG
    Select the operation:Enhance
    Feature size:25
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Identify SGs from the enhanced and masked image. You can play with these parameters based upon your imaging conditions and what your granules look like. ']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
    Select the input image:Enhance_SG
    Name the primary objects to be identified:PABP_SGs
    Typical diameter of objects, in pixel units (Min,Max):1,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.9
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
MeasureObjectSizeShape:[module_num:12|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notes:['I am measuring the size and shape of stress granules because I want to filter potential artifacts based on circularity (eccentricity). ']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
    Select object sets to measure:PABP_SGs, Shrunken_Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:13|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
    Select the objects to filter:PABP_SGs
    Name the output objects:Filtered_PABP_SGs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.870

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:Filtered_PABP_SGs
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:15|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notes:['Here I am relating the segmented cells to their original cell. ']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
    Parent objects:Cells
    Child objects:Shrunken_Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:16|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notes:['Here I am relating stress granules to their original cell. ']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
    Parent objects:Cells
    Child objects:PABP_SGs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:17|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
    Parent objects:Cells
    Child objects:Filtered_PABP_SGs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
OverlayObjects:[module_num:18|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notes:['Overlaying segmented cytoplasm on top of the rescaled GFP image. ']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
    Input:RescaleIntensity_GFP
    Name the output image:Overlaid_Cells
    Objects:Shrunken_Cells
    Opacity:0.5

OverlayObjects:[module_num:19|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notes:['Overlaying segmented prefiltered stress granules (granules identified before applying a circularity filter) on top of the rescaled GFP image. ']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
    Input:RescaleIntensity_GFP
    Name the output image:Overlaid_PABP_SGs
    Objects:PABP_SGs
    Opacity:0.5

OverlayObjects:[module_num:20|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
    Input:RescaleIntensity_GFP
    Name the output image:Overlaid_Filtered_PABP_SGs
    Objects:Filtered_PABP_SGs
    Opacity:0.5

SaveImages:[module_num:21|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notes:['Saving segemented cytoplasms (whole cell - nucleus) on top of rescaled GFP image. ']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_Cells
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_Cells
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/120721/sodium_arsenite/G3BP1wt
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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notes:['Saving prefiltered stress granules (granules identified before applying filter on circularity). ']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
    Select the type of image to save:Image
    Select the image to save:Overlaid_PABP_SGs
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_PABP_SGs
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/120721/sodium_arsenite/G3BP1wt
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Overlaid_Filtered_PABP_SGs
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlaid_Filtered_PAPB_SGs
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/120721/sodium_arsenite/G3BP1wt
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:24|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv’s.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/IF_analysis/Analysis/KO/water
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Threshold_SumOfEntropies_Cells,Image|Threshold_SumOfEntropies_Nuclei,Image|Threshold_SumOfEntropies_PABP_SGs,Image|Threshold_FinalThreshold_Nuclei,Image|Threshold_FinalThreshold_PABP_SGs,Image|Threshold_FinalThreshold_Cells,Image|Threshold_WeightedVariance_PABP_SGs,Image|Threshold_WeightedVariance_Cells,Image|Threshold_WeightedVariance_Nuclei,Image|Threshold_OrigThreshold_Nuclei,Image|Threshold_OrigThreshold_PABP_SGs,Image|Threshold_OrigThreshold_Cells,Image|ExecutionTime_22SaveImages,Image|ExecutionTime_08IdentifySecondaryObjects,Image|ExecutionTime_03NamesAndTypes,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:KO_
    Overwrite existing files without warning?:Yes
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